<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>
  <loop name = "Valve Loop">
    <variable_entry name = "Valve Loop"></variable_entry>
	<valve_protocol>Wash</valve_protocol>
    <valve_protocol>Image</valve_protocol>
    <loop name = "Movie Loop" increment = "name">	
	  <!--<item name = "Movie 2"></item>-->
      <item name = "Movie 3"></item>
    </loop>
    <valve_protocol>Photobleach</valve_protocol>
	<loop name = "Movie Loop" increment = "name">	
	  <item name = "Movie 4"></item>
    </loop>
  </loop>
  <!--<valve_protocol>Nucleus Stain</valve_protocol>
  <loop name = "Movie Loop" increment = "name">	
 	<item name = "Movie 1"></item>
  </loop>-->
</command_sequence>

<item name = "Movie 1">
  <movie>
    <name increment = "Yes">405</name>
    <length>100</length>
	<parameters>HaMERFISH_movie_parameter_405</parameters>
	<overwrite>True</overwrite>
	<check_focus>
	</check_focus>
    <variable_entry name = "Movie Loop"></variable_entry>
  </movie>
</item>

<item name = "Movie 2">
  <movie>
    <name increment = "Yes">568</name>
    <length>100</length>
	<parameters>HaMERFISH_movie_parameter_568</parameters>
	<overwrite>True</overwrite>
	<check_focus>
	</check_focus>
    <variable_entry name = "Movie Loop"></variable_entry>
  </movie>
</item>

<item name = "Movie 3">
  <movie>
    <name increment = "Yes">647</name>
    <length>20</length>
	<parameters>HaMERFISH_movie_parameter_647</parameters>
	<overwrite>True</overwrite>
	<check_focus>
	  <!--<focus_scan></focus_scan>-->
	</check_focus>
    <variable_entry name = "Movie Loop"></variable_entry>
  </movie>
</item>

<item name = "Movie 4">
  <movie>
    <name increment = "Yes">bleach</name>
    <length>100</length>
	<parameters>HaMERFISH_movie_parameter_647</parameters>
	<overwrite>True</overwrite>
	<check_focus>
	</check_focus>
    <variable_entry name = "Movie Loop"></variable_entry>
  </movie>
</item>

<loop_variable name = "Valve Loop">
  <value><valve_protocol>Hybridize 6</valve_protocol></value>
  <value><valve_protocol>Hybridize 7</valve_protocol></value>
  <value><valve_protocol>Hybridize 8</valve_protocol></value>
  <value><valve_protocol>Hybridize 9</valve_protocol></value>
  <value><valve_protocol>Hybridize 10</valve_protocol></value>
  <value><valve_protocol>Hybridize 11</valve_protocol></value>
  <value><valve_protocol>Hybridize 12</valve_protocol></value>
  <value><valve_protocol>Hybridize 13</valve_protocol></value>
  <value><valve_protocol>Hybridize 14</valve_protocol></value>
  <value><valve_protocol>Hybridize 15</valve_protocol></value>
  <value><valve_protocol>Hybridize 16</valve_protocol></value>
</loop_variable>

<loop_variable name = "Movie Loop">
  <file_path></file_path>
</loop_variable>

</recipe>
