<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence>
	<valve_protocol>Wash-wash</valve_protocol>
    <valve_protocol>Image-wash</valve_protocol>
    <valve_protocol>Photobleach-wash</valve_protocol>
	<valve_protocol>Hybridize 6-wash</valve_protocol>
    <valve_protocol>Hybridize 7-wash</valve_protocol>
    <valve_protocol>Hybridize 8-wash</valve_protocol>
	<!--
    <valve_protocol>Hybridize 9-wash</valve_protocol>
    <valve_protocol>Hybridize 10-wash</valve_protocol>
	<valve_protocol>Hybridize 5-wash</valve_protocol>
	    -->
    <valve_protocol>Hybridize 11-wash</valve_protocol>
	<valve_protocol>Hybridize 12-wash</valve_protocol>
	<valve_protocol>Hybridize 13-wash</valve_protocol>
	<valve_protocol>Hybridize 14-wash</valve_protocol>
	<valve_protocol>Hybridize 15-wash</valve_protocol>
	<valve_protocol>Hybridize 16-wash</valve_protocol>


 </command_sequence>

</recipe>
